itrb(v,m,h,n)=gna*h*m^3*(v-ena)+(gk*n^4)*(v-ek)+gl*(v-el)
v'=-(itrb(v,m,h,n) -i+i_ca+i_ahp+i_m)/c
m'=am(v)*(1-m)-bm(v)*m
n'=an(v)*(1-n)-bn(v)*n
h'=ah(v)*(1-h)-bh(v)*h
w'=(winf(v)-w)/tw(v)
s'=alphas*(1-s)/(1+exp(-(v-vthr)/vsshp))-betas*s
# calcium
mlinf=1/(1+exp(-(v-vlth)/vshp))
i_ca=gca*mlinf*(v-eca)
ca'=(-alpha*i_ca-ca/tauca)
# k-ca
i_ahp=gahp*(ca/(ca+kd))*(v-ek)
i_m=gm*w*(v-ek)
#
#
am(v)=.32*(54+v)/(1-exp(-(v+54)/4))
bm(v)=.28*(v+27)/(exp((v+27)/5)-1)
ah(v)=.128*exp(-(50+v)/18)
bh(v)=4/(1+exp(-(v+27)/5))
an(v)=.032*(v+52)/(1-exp(-(v+52)/5))
bn(v)=.5*exp(-(57+v)/40)
#
TW(vs)=tauw/(3.3*EXP((vs-vwt)/20.0)+EXP(-(vs-vwt)/20.0))
WINF(vs)=1.0/(1.0+EXP(-(vs-vwt)/10.0))
#
init v=42.68904,m=.9935,n=.4645,h=.47785,w=.268,s=.2917,ca=.294
par ek=-100,ena=50,el=-67,eca=120
par gl=.2,gk=80,gna=100,gm=0
#par c=1,i=5.854996145726557356995
par c=1,i=6.0416
par gahp=0.5,gca=1,kd=1,alpha=.002,tauca=80,phi=4
par vshp=2.5,vlth=-25,vsshp=2,vthr=-10
# reyes set  vlth=-5,vsshp=10
par betas=.1,alphas=2
par vwt=-35,tauw=100
aux iahp=i_ahp
aux im=i_m
@ meth=qualrk,dt=.01,tol=1e-5,total=25.01,xlo=0,xhi=25,ylo=-85,yhi=50
@ bounds=1000000
done

# 20.81 period for i=5.854996145726557356995

I       gahp

0.915091 0 0 2 4 
0.930579 0.00192807 0.00192807 2 4 
0.961603 0.00578828 0.00578828 2 4 
1.02383 0.0135238 0.0135238 2 4 
1.11768 0.0251705 0.0251705 2 4 
1.25949 0.0427272 0.0427272 2 4 
1.47454 0.0692584 0.0692584 2 4 
1.80213 0.109481 0.109481 2 4 
2.21446 0.159805 0.159805 2 4 
2.63484 0.210803 0.210803 2 4 
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18.3668 2.0556 2.0556 2 4 


 # I     gm  % % %
 0.922174 0 0 2 4 
 0.941222 0.00472671 0.00472671 2 4 
 0.979337 0.0141769 0.0141769 2 4 
 1.05566 0.0330702 0.0330702 2 4 
 1.1703 0.0613796 0.0613796 2 4 
 1.34263 0.103799 0.103799 2 4 
 1.60188 0.16738 0.16738 2 4 
 1.99225 0.262814 0.262814 2 4 
 2.47606 0.38105 0.38105 2 4 
 2.96115 0.500091 0.500091 2 4 
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10.311 2.47725 2.47725 2 4 
